PsychoPy2experiment version="2020.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = black
  expName = speciale_eksperiment
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Routines
  Routine trial
    TextComponent spørgsmål
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Hvis have var det?
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    MouseComponent mouse
      clickable = polygon_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    PolygonComponent polygon_3
      fillColor = $[1,1,1]
      pos = (0, -0.4)
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine trial_2
    MouseComponent trial_mouse
      clickable = option_left, option_right
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      syncScreenRefresh = True
      timeRelativeTo = routine
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    TextComponent option_left
      letterHeight = 0.075
      pos = (0.7, 0.4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 20
      text [set every repeat] = $left_option
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    TextComponent option_right
      letterHeight = 0.075
      pos = (-0.7, 0.4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 20
      text [set every repeat] = $right_option
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    TextComponent trial_quest
      letterHeight = 0.075
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 20
      text [set every repeat] = $question
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    PolygonComponent trial_start
      fillColor = $[1,1,1]
      pos = (0, -0.4)
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent triCount
      letterHeight = 0.03
      pos = (0.7, -0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $trial_counter
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  Routine pause
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine tak
    TextComponent next_text
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        Tak!

        Tryk på krydset
    PolygonComponent next_text_cross
      fillColor = $[1,1,1]
      pos = (0, -0.4)
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent next_text_mouse
      clickable = next_text_cross
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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    TextComponent tak_train_count
      letterHeight = 0.03
      pos = (0.7, -0.4)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $trial_counter
  Routine stimuli
    TextComponent stim_1_text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      text [set every repeat] = $stim
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    MouseComponent stim_1_mouse
      clickable = stim_1_next
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent stim_1_next
      fillColor = $[1,1,1]
      pos = (0, -0.4)
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    TextComponent trial_count
      letterHeight = 0.03
      pos = (0.70, -0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $trial_counter
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  Routine stimuli_2
    TextComponent stim_2_text
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $sentence_tar
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    MouseComponent stim_2_mouse
      clickable = stim_2_next
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent stim_2_next
      fillColor = $[1,1,1]
      pos = (0, -0.4)
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine training_stimuli_1
    CodeComponent code
      Code Type = Auto->JS
  Routine training_trial_2
  Routine nu_starter_vi
    TextComponent real_start
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Sådan! Det var træningsrunden

        Tal med den forsøgsansvarlige for at gå videre til forsøget.
    KeyboardComponent start_real
      allowedKeys = 'x', 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_1
    TextComponent instruktion
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Velkommen til forsøget!

        I forsøget vil du blive præsenteret for nogle sætninger. Til hver sætning er der et spørgsmål, du skal svare på. Du skal klikke på det svar, du tror er rigtigt, så hurtigt som muligt.

        Du går videre ved at klikke med musen på krydset.
    MouseComponent instruction_mouse
      clickable = start_1
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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    PolygonComponent start_1
      fillColor = $[1,1,1]
      pos = (0, -0.4)
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine instruction_2
    TextComponent instr_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Du skal trykke med musen på krydset for at få præsenteret ny tekst i løbet af forsøget.

        Der vil først være en træningsrunde, hvor det bliver klart, hvad du skal gøre.

        Tryk på krydset, når du er klar til at starte træningsrunden.
    MouseComponent intr_2_mouse
      clickable = start_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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    PolygonComponent start_2
      fillColor = $[1,1,1]
      pos = (0, -0.4)
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine training_stimuli
    TextComponent train_stim_1
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 7
      text [set every repeat] = $stim
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    PolygonComponent train_stim_1_next
      fillColor = $[1,1,1]
      pos = (0, -0.4)
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    MouseComponent train_stim_1_mouse
      clickable = train_stim_1_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      timeRelativeTo = routine
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    TextComponent train_count
      letterHeight = 0.03
      pos = (0.7, -0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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      text [set every repeat]:
        $trial_counter
  Routine training_stimuli_2
    TextComponent train_stim_2
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = test
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    PolygonComponent train_stim_2_next
      fillColor = $[1,1,1]
      pos = (0, -0.40)
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    MouseComponent train_stim_2_mouse
      clickable = train_stim_2_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      timeRelativeTo = routine
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  Routine training_trial_3
    MouseComponent training_mousetrack
      clickable = option_left_train, option_right_train
      forceEndRoutineOnPress = valid click
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      timeRelativeTo = routine
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    TextComponent option_left_train
      letterHeight = 0.075
      pos = (-0.7, 0.4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      text [set every repeat] = $option_1
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    TextComponent option_right_train
      letterHeight = 0.075
      pos = (0.70, 0.4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      text [set every repeat] = $option_2
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    TextComponent question_train
      letterHeight = 0.075
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      text [set every repeat] = $question
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    PolygonComponent train_trial_start
      fillColor = $[1,1,1]
      pos = (0, -0.40)
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent trial_count_train
      letterHeight = 0.03
      pos = (0.7, -0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text [set every repeat]:
        $trial_counter
  Routine end
    TextComponent end_text
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        Forsøget er slut!
        Tak for din deltagelse.
  Routine start_real_2
    PolygonComponent start_between
      fillColor = $[1,1,1]
      pos = (0, -0.40)
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent starting_text
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      text = Tryk på krydset for at starte
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    MouseComponent real_start_mouse
      clickable = start_between
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  Routine instruction_1
  Routine pause
  Routine instruction_2
  LoopInitiator training_trial loopType="TrialHandler"
    conditionsFile = training_stimuli.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('stim_1', 'Birgitte var meget tilfreds.'), ('stim_2', 'Agnete elskede popcorn i biografen.'), ('stim', 'Birgitte var meget tilfreds. Agnete elskede popcorn i biografen.'), ('option_1', 'Agnete'), ('option_2', 'Birgitte'), ('question', 'Hvem elskede popcorn?'), ('id', 1), ('correctAnswer', 'option_1'), ('trial_counter', '1/5')]),
      OrderedDict([('stim_1', 'Ib var meget lykkelig.'), ('stim_2', 'Jens elskede film.'), ('stim', 'Ib var meget lykkelig. Jens elskede film.'), ('option_1', 'Ib'), ('option_2', 'Jens'), ('question', 'Hvem var lykkelig?'), ('id', 2), ('correctAnswer', 'option_1'), ('trial_counter', '2/5')]),
      OrderedDict([('stim_1', 'Casper var meget begejstret.'), ('stim_2', 'Han så Theodor danse.'), ('stim', 'Casper var meget begejstret. Han så Theodor danse.'), ('option_1', 'Theodor'), ('option_2', 'Casper'), ('question', 'Hvem var begejstret?'), ('id', 3), ('correctAnswer', 'option_2'), ('trial_counter', '3/5')]),
      OrderedDict([('stim_1', 'Marianne var meget flov.'), ('stim_2', 'Line elskede film.'), ('stim', 'Marianne var meget flov. Line elskede film.'), ('option_1', 'Line'), ('option_2', 'Marianne'), ('question', 'Hvem elskede film?'), ('id', 4), ('correctAnswer', 'option_1'), ('trial_counter', '4/5')])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
    Routine pause
    Routine training_stimuli
    Routine training_trial_3
    Routine tak
  LoopTerminator training_trial
  Routine nu_starter_vi
  Routine start_real_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trial_stimuli_3_2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('nr_in_trial', 1), ('list_1', 3), ('id', 152), ('item', 56), ('condition', 'na'), ('type', 'Filler_2'), ('sentence_involvement', 'Sune var meget fornøjet.'), ('sentence_tar', 'Gustav fik en optagelse af ham.'), ('stim', 'Sune var meget fornøjet. Gustav fik en optagelse af ham.'), ('question', 'Hvem var optagelsen af?'), ('verbum_1', 'na'), ('verbum_2', 'na'), ('deltager_koen', 'mand'), ('subj_navn', 'Sune'), ('obj_navn', 'Gustav'), ('feeling', 'fornøjet'), ('subj_screen_pos', 'right'), ('left_option', 'Gustav'), ('right_option', 'Sune'), ('trial_counter', '1/80')]),
      OrderedDict([('nr_in_trial', 2), ('list_1', 3), ('id', 140), ('item', 44), ('condition', 'na'), ('type', 'Filler_1'), ('sentence_involvement', 'Allan var  rasende.'), ('sentence_tar', 'Torben var ikke glad for at han spillede violin.'), ('stim', 'Allan var  rasende. Torben var ikke glad for at han spillede violin.'), ('question', 'Hvem spillede violin?'), ('verbum_1', 'na'), ('verbum_2', 'na'), ('deltager_koen', 'mand'), ('subj_navn', 'Allan'), ('obj_navn', 'Torben'), ('feeling', 'rasende'), ('subj_screen_pos', 'left'), ('left_option', 'Allan'), ('right_option', 'Torben'), ('trial_counter', '2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,
      OrderedDict([('nr_in_trial', 3), ('list_1', 3), ('id', 22), ('item', 6), ('condition', 'obj_refl'), ('type', 'objPræpF'), ('sentence_involvement', 'Magda var meget lykkelig.'), ('sentence_tar', 'Birthe krammede hende i sit køkken.'), ('stim', 'Magda var meget lykkelig. Birthe krammede hende i sit køkken.'), ('question', 'Hvis køkken var det?'), ('verbum_1', 'kramme'), ('verbum_2', 'na'), ('deltager_koen', 'kvinde'), ('subj_navn', 'Birthe'), ('obj_navn', 'Magda'), ('feeling', 'lykkelig'), ('subj_screen_pos', 'right'), ('left_option', 'Magda'), ('right_option', 'Birthe'), ('trial_counter', '3/80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,
      OrderedDict([('nr_in_trial', 4), ('list_1', 3), ('id', 138), ('item', 42), ('condition', 'na'), ('type', 'Filler_1'), ('sentence_involvement', 'Torkild var meget frustreret.'), ('sentence_tar', 'Phillip nød at han havde fri.'), ('stim', 'Torkild var meget frustreret. Phillip nød at han havde fri.'), ('question', 'Hvem havde fri?'), ('verbum_1', 'na'), ('verbum_2', 'na'), ('deltager_koen', 'mand'), ('subj_navn', 'Torkild'), ('obj_navn', 'Phillip'), ('feeling', 'frustreret'), ('subj_screen_pos', 'right'), ('left_option', 'Phillip'), ('right_option', 'Torkild'), ('trial_counter', '4/80')])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
    Routine pause
    Routine stimuli
    Routine trial_2
    Routine tak
  LoopTerminator trials
  Routine end
